WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(RootFolder, Subject)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai
  RootFolder=C:/BonsaiDataDoC/Data/session_data
  Subject=366122
  DateTimeOffset=0001-01-01T00:00:00.0000000+00:00
  SubjectName=LoggingRootPath

ExternalizedMapping(PortName, Value(DisplayName=ValveOpenTime))
-> GroupWorkflow Hardware
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    ExternalizedMapping(Value(DisplayName=PortName))
    -> StringProperty(Value=COM7)
    -> PropertyMapping(PortName) => #3
    #0, #3 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM7) => #4
    SubscribeSubject SelectedImages
    -> Take(Count=1) => #6
    #4, #6 -> SubscribeWhen
    -> PublishSubject BehaviorEvents

    GroupWorkflow Lickometer
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #1
        -> MemberSelector(Selector=Value)
        -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
        -> DistinctUntilChanged
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=Seconds) => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject LickOnsetEvent

        SubscribeSubject LickOnsetEvent
        -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Lick, Selector=nil)

    ExternalizedMapping(Value)
    -> GroupWorkflow Valve
        ExternalizedMapping(Value)
        -> IntProperty(Value=80)
        -> BehaviorSubject ValveOpenTimeMs

        SubscribeSubject BehaviorEvents
        -> Take(Count=1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort0))
        -> MulticastSubject BehaviorCommands

        BehaviorSubject<System.Reactive.Unit> GiveReward => #7
        SubscribeSubject ValveOpenTimeMs => #8
        #7, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
        -> MulticastSubject BehaviorCommands

    GroupWorkflow Wheel
        SubscribeSubject BehaviorEvents
        -> Take(Count=1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #5
        -> MemberSelector(Selector=Value.Encoder) => #6
        #5 -> MemberSelector(Selector=Seconds) => #7
        #6, #7 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject Encoder

    GroupWorkflow Logging
        SubscribeSubject BehaviorEvents
        -> Bonsai.Harp.GroupByRegister => #1
        SubscribeSubject LoggingRootPath
        -> Format(Format={0}/Behavior.harp/Behavior.bin, Selector=it)
        -> PropertyMapping(FileName) => #4
        #1, #4 -> Bonsai.Harp.MessageWriter
          FileName=C:/BonsaiDataDoC/Data/session_data/366122/366122_20260720T180305/Behavior.harp/Behavior.bin
          Suffix=None
          Buffered=true
          Overwrite=true
          FilterType=Include
          MessageType=nil

        Disable Bonsai.Shaders.Timer(DueTime=PT2S)
        -> Disable Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> Disable MulticastSubject BehaviorCommands

ExternalizedMapping(Photodiode_ExtentX, Photodiode_ExtentY, Photodiode_LocationX, Photodiode_LocationY, BlackPhotodiodeFrames, WhiteMinFrames, WhiteMaxFrames) => #4
BooleanProperty(Value=false) => #5
#4, #5 -> SelectMany Photodiode => #6
    Bonsai.Shaders.RenderFrame
    -> IntProperty(Value=1) => #1
    ExternalizedMapping(BlackPhotodiodeFrames, WhiteMinFrames, WhiteMaxFrames) => #2
    #1, #2 -> Scan
        WorkflowInput Source1
        -> MemberSelector(Selector=Accumulation) => #1
        -> Subtract(Operand=IntProperty(Value=1)) => #2
        ExternalizedMapping(Value(DisplayName=BlackPhotodiodeFrames))
        -> IntProperty(Value=15)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: -it
        -> PropertyMapping(Value) => #6
        #2, #6 -> Condition => #7
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> NotEqual(Operand=IntProperty(Value=-15))
            -> WorkflowOutput
        #5 -> PropertyMapping(Value) => #8
        #2, #8 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=-15))
            -> WorkflowOutput
        -> Bonsai.Numerics.CreateRandom(Seed=nil) => #10
        ExternalizedMapping(Value(DisplayName=WhiteMinFrames))
        -> IntProperty(Value=10) => #12
        -> PropertyMapping(Lower) => #13
        ExternalizedMapping(Value(DisplayName=WhiteMaxFrames))
        -> PropertySource<Bonsai.Numerics.Distributions.CreateDiscreteUniform,System.Int32>(MemberName=Upper, Value=20) => #15
        -> PropertyMapping(Upper) => #16
        #10, #13, #16 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=10, Upper=20)
        -> Bonsai.Numerics.Distributions.Sample => #18
        #1 -> IsEmpty
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Bonsai.Numerics.CreateRandom(Seed=nil) => #21
        #12 -> PropertyMapping(Lower) => #22
        #15 -> PropertyMapping(Upper) => #23
        #21, #22, #23 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=10, Upper=20)
        -> Bonsai.Numerics.Distributions.Sample => #25
        #7, #18, #25 -> Merge
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it > 0 ? 1 : 0
    -> PropertyMapping(ColorR, ColorG, ColorB) => #5
    ExternalizedMapping => #6
      ExtentX(DisplayName=Photodiode_ExtentX)
      ExtentY(DisplayName=Photodiode_ExtentY)
      LocationX(DisplayName=Photodiode_LocationX)
      LocationY(DisplayName=Photodiode_LocationY)
    SubscribeSubject Draw => #7
    #5, #6, #7 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=12
      ExtentY=20
      LocationX=42
      LocationY=-25
      Layer=2
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1
    -> MemberSelector(Selector=X)
    -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Photodiode-{0}, Selector=nil)
    -> DistinctUntilChanged
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> WorkflowOutput
SubscribeSubject EndSession => #7
#6, #7 -> TakeUntil

Bonsai.Numerics.CreateRandom(Seed=nil)
-> BehaviorSubject Random

SubscribeSubject LickOnsetEvent => #11
SubscribeSubject "Change Flash"
-> Delay(DueTime=PT0.15S) => #13
#11, #13 -> Gate(DueTime=PT0.6S)
-> Throttle(DueTime=PT0.6S)
-> Unit => #16
SubscribeSubject EndSession => #17
#16, #17 -> TakeUntil
-> MulticastSubject GiveReward
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Reward, Selector=nil)

IncludeWorkflow(Path=Extensions\SLAP-Start.bonsai) => #21
SubscribeSubject StartExpt => #22
#21, #22 -> SubscribeWhen

Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
-> PublishSubject StartExpt

SubscribeSubject SelectedImages => #26
SubscribeSubject Random => #27
#26, #27 -> Bonsai.Numerics.Permutation
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_PERMUTE:{0}, Selector=it)
-> CloseCycle
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_CLOSE:{0}, Selector=it)
-> CreateObservable
    SubscribeSubject Draw => #0
    WorkflowInput Source1 => #1
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Format) => #3
    #1, #3 -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector=Item2)
    -> MemberSelector(Selector=Item1) => #5
    #0, #5 -> WithLatestFrom
    -> GroupWorkflow "Flash Sequence"
        WorkflowInput Source1
        -> GroupWorkflow Flash
            WorkflowInput Source1
            -> GroupWorkflow PositionImage => #1
                WorkflowInput Source1
                -> Sink
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName="", TextureTarget=Texture2D)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #2
                ExternalizedMapping(ExtentX, ExtentY, LocationX, LocationY) => #3
                ExternalizedMapping(Value(DisplayName=Angle))
                -> BonVision.AngleProperty(Value=0)
                -> PropertyMapping(Angle) => #6
                #2, #3, #6 -> GroupWorkflow Transform => #7
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(X(DisplayName=LocationX), Y(DisplayName=LocationY)) => #1
                    #0, #1 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #2
                    ExternalizedMapping(X(DisplayName=ExtentX), Y(DisplayName=ExtentY)) => #3
                    #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=120, Y=95, Z=1) => #4
                    ExternalizedMapping(Angle) => #5
                    #4, #5 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=Image)
                    -> WorkflowOutput
                ExternalizedMapping(ShiftX, ShiftY) => #8
                #7, #8 -> GroupWorkflow Shift
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(X(DisplayName=ShiftX), Y(DisplayName=ShiftY)) => #1
                    #0, #1 -> Bonsai.Shaders.CreateScale(X=0, Y=0, Z=1)
                    -> MemberSelector(Selector="M11,M22")
                    -> Bonsai.Shaders.UpdateUniform(UniformName=shift, ShaderName=Image)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> Condition
                WorkflowInput Source1

                SubscribeSubject Omission
                -> BitwiseNot
                -> WorkflowOutput

                BooleanProperty(Value=false)
            -> GroupWorkflow DrawFlash => #3
                WorkflowInput Source1
                -> Bonsai.Shaders.DrawMesh(ShaderName=Image, MeshName=Quad)
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #1 -> Condition
                WorkflowInput Source1

                SubscribeSubject Omission
                -> WorkflowOutput

                BooleanProperty(Value=true)
            -> GroupWorkflow DrawOmission => #5
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> WorkflowOutput
            #3, #5 -> Merge => #6
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #7
            #6, #7 -> TakeUntil
            -> Last
            -> WorkflowOutput

            SubscribeSubject OmissionTrigger
            -> GroupWorkflow InitOmission
                SubscribeSubject Random
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                FloatProperty(Value=0.05) => #3
                #2, #3 -> Zip
                -> LessThanOrEqual => #5
                WorkflowInput Source1 => #6
                SubscribeSubject PresentationGoal
                -> Subtract(Operand=IntProperty(Value=2)) => #8
                #6, #8 -> WithLatestFrom
                -> LessThan => #10
                IntProperty(Value=3) => #11
                #6, #11 -> WithLatestFrom
                -> GreaterThan => #13
                #10, #13 -> Zip
                -> BitwiseAnd => #15
                #5, #15 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> BehaviorSubject Omission
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Omission, Selector=nil)
        -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=EndFlash, Selector=nil)
        -> Defer "Gray period"
            WorkflowInput Source1
            -> Delay(DueTime=PT0.5S)
            -> WorkflowOutput
        -> Repeat
        -> ElementIndex
        -> MemberSelector(Selector=Index) => #6
        -> BehaviorSubject FlashCount
        -> TakeWhile
            WorkflowInput Source1 => #0
            SubscribeSubject TotalPresentations => #1
            #0, #1 -> WithLatestFrom
            -> LessThan
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
        #6 -> MulticastSubject OmissionTrigger

        Disable SubscribeSubject OmissionTrigger
        -> Disable Condition
            WorkflowInput Source1 => #0
            SubscribeSubject PresentationGoal
            -> Subtract(Operand=IntProperty(Value=2)) => #2
            #0, #2 -> WithLatestFrom
            -> LessThan => #4
            IntProperty(Value=3) => #5
            #0, #5 -> WithLatestFrom
            -> GreaterThan => #7
            #4, #7 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> Disable GroupWorkflow InitOmission
            SubscribeSubject Random
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample => #2
            FloatProperty(Value=0.05) => #3
            #2, #3 -> Zip
            -> LessThanOrEqual
            -> WorkflowOutput

            WorkflowInput Source1
        -> Disable ReplaySubject Omission(BufferSize=nil)
        -> Disable IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Omission, Selector=nil)

        Disable SubscribeSubject OmissionTrigger
        -> Disable Condition
            WorkflowInput Source1 => #0
            SubscribeSubject PresentationGoal
            -> Subtract(Operand=IntProperty(Value=2)) => #2
            #0, #2 -> WithLatestFrom
            -> LessThan => #4
            IntProperty(Value=3) => #5
            #0, #5 -> WithLatestFrom
            -> GreaterThan => #7
            #4, #7 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> Disable GroupWorkflow InitOmission
            SubscribeSubject Random
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample => #2
            FloatProperty(Value=0.05) => #3
            #2, #3 -> Zip
            -> LessThanOrEqual
            -> WorkflowOutput

            WorkflowInput Source1
        -> Disable BehaviorSubject Omission
        -> Disable IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Omission, Selector=nil)
    -> WorkflowOutput

    GroupWorkflow InitTrial
        Disable SubscribeSubject Random => #0
        Disable ExternalizedMapping(Lower, Upper) => #1
        #0, #1 -> Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=10, Upper=15)
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable ReplaySubject SetPresentationGoal(BufferSize=nil)
        -> Disable BehaviorSubject TotalPresentations
        -> Disable BehaviorSubject PresentationGoal

        SubscribeSubject Random
        -> DrawFromGeometric(P=0.3, Random="")
        -> Add(Operand=IntProperty(Value=4))
        -> ReplaySubject SetPresentationGoal(BufferSize=nil)
        -> BehaviorSubject TotalPresentations
        -> BehaviorSubject PresentationGoal

        IntProperty(Value=0)
        -> BehaviorSubject Aborts

        IntProperty(Value=0)
        -> BehaviorSubject OmissionTrigger

        WorkflowInput Source1

    SubscribeSubject LickOnsetEvent
    -> GroupWorkflow CountAborts
        WorkflowInput Source1
        -> Throttle(DueTime=PT0.3S) => #1
        Timer(DueTime=PT4.5S) => #2
        #1, #2 -> SkipUntil
        -> IntProperty(Value=1) => #4
        SubscribeSubject Aborts => #5
        #4, #5 -> WithLatestFrom
        -> Add
        -> WorkflowOutput
    -> MulticastSubject Aborts

    SubscribeSubject Aborts
    -> Condition CheckNonZero => #14
        WorkflowInput Source1 => #0
        IntProperty(Value=0) => #1
        #0, #1 -> WithLatestFrom
        -> GreaterThan
        -> WorkflowOutput
    IntProperty(Value=5) => #15
    #14, #15 -> WithLatestFrom => #16
    -> Condition ResetCount
        WorkflowInput Source1
        -> LessThan
        -> WorkflowOutput
    -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Abort, Selector=nil)
    -> BooleanProperty(Value=false) => #19
    #16 -> Condition ResetGoal+Count
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> GroupWorkflow ResetGoal
        WorkflowInput Source1 => #0
        SubscribeSubject SetPresentationGoal => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject PresentationGoal
        -> IntProperty(Value=0)
        -> MulticastSubject Aborts
        -> WorkflowOutput
    -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Abort-Reset, Selector=nil)
    -> BooleanProperty(Value=false) => #23
    #19, #23 -> Merge
    -> GroupWorkflow ResetCount
        WorkflowInput Source1 => #0
        SubscribeSubject FlashCount => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject PresentationGoal => #4
        #3, #4 -> WithLatestFrom
        -> Add
        -> MulticastSubject TotalPresentations
        -> WorkflowOutput
-> Concat
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=ChangeFlash, Selector=nil)
-> BehaviorSubject "Change Flash"
-> Repeat => #36
ExternalizedMapping(DueTime)
-> Bonsai.Shaders.Timer(DueTime=PT15S)
-> FloatProperty(Value=0)
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=EndFrame, Selector=nil) => #40
Bonsai.Windows.Input.KeyDown(Filter=X, SuppressRepetitions=false)
-> FloatProperty(Value=0)
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=KeySTOP, Selector=nil) => #43
#40, #43 -> Merge => #44
#36, #44 -> TakeUntil
-> TakeLast(Count=1)
-> PublishSubject EndSession

IncludeWorkflow(Path=Extensions\SLAP-Stop.bonsai) => #48
SubscribeSubject EndSession => #49
#48, #49 -> SubscribeWhen
-> Bonsai.Shaders.Delay(DueTime=PT5S)
-> WorkflowOutput

SubscribeSubject LoggingRootPath
-> Format(Format={0}/bonsai_event_log.csv, Selector=it)
-> PropertyMapping(FileName) => #55
Bonsai.Shaders.RenderFrame => #56
#55, #56 -> IncludeWorkflow Allen.Log
  Path=BonVision:Logging.FrameEventLogger.bonsai
  Append=false
  Overwrite=true
  Suffix=None
  FileName=C:/BonsaiDataDoC/Data/session_data/366122/366122_20260720T180305/bonsai_event_log.csv
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Frame, Selector=nil)

ExternalizedMapping(Path)
-> Bonsai.IO.EnumerateFiles(Path=stimuli\images_A, SearchPattern=*.tiff, SearchOption=TopDirectoryOnly) => #60
-> CreateObservable LoadImages => #61
    WorkflowInput Source1 => #0
    -> InputMapping(FileName)
    -> Bonsai.Shaders.LoadImage => #2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=""
      ColorType=Unchanged
      FlipMode=Vertical
    #2, #0 -> Zip
    -> WorkflowOutput
-> Concat => #62
-> ReplaySubject SelectedImages(BufferSize=nil) => #63
-> TakeLast(Count=1)
#60 -> Count
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_ENUM_COUNT:{0}, Selector=it)
#61 -> Count
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_LOAD_COUNT:{0}, Selector=it)
#62 -> Count
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_CONCAT_COUNT:{0}, Selector=it)
#63 -> Count
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_SELECTED_COUNT:{0}, Selector=it)
#60 -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_ENUM:{0}, Selector=it)
#61 -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_LOAD:{0}, Selector=it)
#62 -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_CONCAT:{0}, Selector=it)
#63 -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=DBG_SELECTED:{0}, Selector=it)

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-130, Right=130, Bottom=-50, Top=50)
-> PublishSubject Draw
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10)) => #77
ExternalizedMapping(R(DisplayName="Screen_RedColor (0-1)"), G(DisplayName="Screen_GreenColor (0-1)"), B(DisplayName="Screen_BlueColor (0-1)")) => #78
#77, #78 -> IncludeWorkflow(Path=Extensions\ColorBalance.bonsai, ExtentX=1, ExtentY=1, LocationX=0, LocationY=0, Layer=1, Angle=0, R=0, G=0, B=1)

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Transparent
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Hidden
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=30
  TargetUpdateFrequency=480
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorBalance
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=BonVision:Shaders.Gratings.vert
      FragmentShader=..\bonsai\Shaders\ColorBalance.frag
-> Bonsai.Resources.LoadResources
